<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:p1="clr-namespace:PSTH;assembly=PSTH"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Subscriber">
          <zmq:ConnectionString>tcp://localhost:5556</zmq:ConnectionString>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:OpenEphysParser">
          <p1:SamplingRate>40000</p1:SamplingRate>
          <p1:Type>Spike</p1:Type>
          <p1:SortedSpikeOnly>false</p1:SortedSpikeOnly>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="io:WriteLine" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>NumPad1</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>NumPad2</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>NumPad3</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SpikeHistogram">
          <p1:LeftHalfWindow>PT0.5S</p1:LeftHalfWindow>
          <p1:RightHalfWindow>PT1S</p1:RightHalfWindow>
          <p1:BinCount>15</p1:BinCount>
          <p1:BinWidthMs>100</p1:BinWidthMs>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteLine" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Mats</Selector>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="9" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="6" Label="Source2" />
      <Edge From="5" To="6" Label="Source3" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="9" Label="Source2" />
      <Edge From="8" To="9" Label="Source3" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>